CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:7
HasImagePlaneDetails:False

InputExternal:[module_num:2|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
    Give this image a name:input

ColorToGray:[module_num:3|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notes:['Split color image into R, G and B channels. The red channel seems to have the best contrast, so we’ll try using that one.']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
    Select the input image:input
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ImageMath:[module_num:4|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notes:['Object detection assumes light foreground and dark background, so invert the pixel intensities.']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRed
    Image or measurement?:Image
    Select the first image:OrigRed
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the cells. The per-image count is output by this module. Some more tweaking of the settings is definitely needed.']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
    Select the input image:InvertedRed
    Name the primary objects to be identified:Filled
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:.3,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
ConvertObjectsToImage:[module_num:5|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
    Select the input objects:Filled
    Name the output image:Filled_Image
    Select the color format:Binary (black & white)
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
Morph:[module_num:6|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
    Select the input image:Filled_Image
    Name the output image:MorphBlue
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Diameter:10.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Smooth:[module_num:7|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
    Select the input image:MorphBlue
    Name the output image:output
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7
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