CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:6
HasImagePlaneDetails:False

InputExternal:[module_num:2|svn_version:\'Unknown\'|variable_revision_number:1|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Give this image a name:input

ColorToGray:[module_num:3|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\'Split color image into R, G and B channels. The red channel seems to have the best contrast, so we\\xe2\\x80\\x99ll try using that one.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:input
    Conversion method:Split
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
    Convert hue to gray?:Yes
    Name the output image:OrigHue
    Convert saturation to gray?:Yes
    Name the output image:OrigSaturation
    Convert value to gray?:Yes
    Name the output image:OrigValue
    Channel count:1
    Channel number:Red\x3A 1
    Relative weight of the channel:1
    Image name:Channel1

ImageMath:[module_num:4|svn_version:\'Unknown\'|variable_revision_number:4|show_window:False|notes:\x5B\'Object detection assumes light foreground and dark background, so invert the pixel intensities.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRed
    Image or measurement?:Image
    Select the first image:OrigRed
    Multiply the first image by:1
    Measurement:
    Image or measurement?:Image
    Select the second image:
    Multiply the second image by:1
    Measurement:

IdentifyPrimaryObjects:[module_num:5|svn_version:\'Unknown\'|variable_revision_number:10|show_window:True|notes:\x5B\'Identify the cells. The per-image count is output by this module. Some more tweaking of the settings is definitely needed.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:InvertedRed
    Name the primary objects to be identified:Filled
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
    Enter Laplacian of Gaussian threshold:0.5
    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
    Enter LoG filter diameter:5
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:.4,1.000000
    Approximate fraction of image covered by objects?:0.01
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Select binary image:A10-14
    Masking objects:From image
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
    Size of adaptive window:10
    Use default parameters?:Default
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
